PsychoPy2experiment version="2022.1.3"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = First Attempt at Part 2 Expt Script
  keyboardBackend = ioHub
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Routines
  Routine trial
    SoundComponent stimuli3streams
      sound = $stimuli
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 30.0
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    SoundComponent stimuli3streamsoddballs
      sound = $stimuli
      startVal [time (s)] = 34.0
      stopVal [duration (s)] = 30.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 64.0
      stopVal [duration (s)] = 5.0
      text = How many oddballs did you hear?
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 64.0
      stopVal [duration (s)] = 5.0
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    ImageComponent arrow
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    ImageComponent feedback
      size = (0.5, 0.5)
      startVal [time (s)] = 69.0
      stopVal [duration (s)] = 2.0
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  Routine break_2
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90.0
      text = Well done, it's time for a 90 second break.
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 4
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    Routine trial
  LoopTerminator trials
  Routine break_2
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 4
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    Routine trial
  LoopTerminator trials_2
  Routine break_2
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = random
    nReps = 4
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    Routine trial
  LoopTerminator trials_3
  Routine break_2
  LoopInitiator trials_4 loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine trial
  LoopTerminator trials_4
